<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.62362504056" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.90842209691" TargetVolume="25"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.92348409232" TargetSurface="23"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.64323454359" TargetSurface="23"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">16.0</Energy>
      <Energy Type1="1" Type2="1">1.15598390693</Energy>
      <Energy Type1="1" Type2="2">5.99365744024</Energy>
      <Energy Type1="Medium" Type2="2">16.0</Energy>
      <Energy Type1="2" Type2="2">12.0587539261</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="FlexibleDiffusionSolverFE"/>
   </Plugin>
   <Steppable Type="FlexibleDiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <DiffusionConstant>0.1</DiffusionConstant>
            <DecayConstant>1e-05</DecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="100" y="100" z="1"/>
         <Gap>5</Gap>
         <Width>5</Width>
         <Types>1,2</Types>
      </Region>
   </Steppable>
</CompuCell3D>
